PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Braille_Stim_Final
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Routines
  Routine trial
    TextComponent new_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = New trial
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    ParallelOutComponent true_pattern
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 1
      stopVal [time (s)] = 3
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    PolygonComponent cue_right
      fillColor = white
      shape = custom polygon...
      size = (0.25, 0.25)
      startVal [time (s)] = 4
      stopVal [time (s)] = 6
      vertices =  [(-0.4,0.05),(-0.4,-0.05),(-.2,-0.05),(-.2,-0.1),(0,0),(-.2,0.1),(-.2,0.05)]
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    PolygonComponent cue_left
      fillColor = white
      shape = custom polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      stopVal [time (s)] = 6
      vertices = [(0.4,0.05),(0.4,-0.05),(.2,-0.05),(.2,-0.1),(0,0),(.2,0.1),(.2,0.05)]
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    ParallelOutComponent pattern1
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 7
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    JoyButtonsComponent button_resp1
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 7.1
      stopVal [duration (s)] = 1
      store = first key
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    ParallelOutComponent pattern2
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 8.1
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    JoyButtonsComponent button_resp2
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 8.2
      stopVal [duration (s)] = 1
      store = first key
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    ParallelOutComponent pattern3
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 9.2
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    JoyButtonsComponent button_resp3
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 9.3
      stopVal [duration (s)] = 1
      store = first key
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    ParallelOutComponent pattern4
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 10.3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    JoyButtonsComponent button_resp4
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 10.4
      stopVal [duration (s)] = 1
      store = first key
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    ParallelOutComponent pattern5
      address = 0xDFF8 
      startData = 1
      startVal [time (s)] = 11.4
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    JoyButtonsComponent button_resp5
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 1
      store = first key
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    PolygonComponent cross2
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 6
      stopVal [time (s)] = 16
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  Routine feedback
    TextComponent feedback_string
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      text = This is the feedback routine
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Flow
  LoopInitiator Paradigm loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    LoopInitiator first_set loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine trial
    LoopTerminator first_set
    Routine feedback
  LoopTerminator Paradigm
