PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = untitled
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Routines
  Routine trial
    TextComponent new_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.1
      text = New Trial
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    PolygonComponent cross_shape
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [time (s)] = 3
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    JoyButtonsComponent button_resp
      allowedKeys = 'b','y','g','r'
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [time (s)] = 5
      store = all keys
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
